PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = priming experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Copy of study_word_file(1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p'},
      {'test': '_ha_t'},
      {'test': 't_hi_t'},
      {'test': '_ou_e'},
      {'test': 'p_st_y'},
      {'test': 'c_s_'},
      {'test': '_ru_is_'},
      {'test': 'p_li_e'},
      {'test': '_ey_'},
      {'test': 'p_st_r'},
      {'test': '_oa_d'},
      {'test': '_a_bl_'},
      {'test': 'p_on_'},
      {'test': '_oo_'},
      {'test': 'c_s_io_'},
      {'test': 't_bl_'},
      {'test': 'pe_c_l'},
      {'test': 'v_s_'},
      {'test': 'b_o_l_'},
      {'test': 'c_me_a'}]
    Routine test
  LoopTerminator trials_2
